dirPath = "Z:/skala/Andy/SingleCell_Mito_Morphology/20231006_Day8_A2/Image/Mito/";

// Get a list of files in the directory
list = getFileList(dirPath);
nFiles = lengthOf(list);

// Loop through each file in the directory
for (i = 0; i < nFiles; i++) {
    // Construct the full path to the file
    filePath = dirPath + list[i];

    // Open the image
    open(filePath);

    // Check if there are open images
    if (nImages > 0) {
        // Process the opened image
        setOption("ScaleConversions", true);
        run("8-bit");

        run("Unsharp Mask...", "radius=2 mask=0.50");

        // Enhance Local Contrast (CLAHE) without specifying a mask
        run("Enhance Local Contrast (CLAHE)", "blocksize=256 histogram=512 maximum=6");

        run("Auto Threshold", "method=Otsu white");
        
        // Save the processed image
        saveAs("Tiff", filePath.replace(".tif", "_MitoMask.tif"));

        // Close the opened image
        close();
    }
}
